PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'Session': u'pre', u'Participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant'], expName, expInfo['date'])
  expName = Stroop
  Screen = 1
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Routines
  Routine trial
    TextComponent stimuli
      color [set every repeat] = $color
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp_time
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down', 'right'
      startVal [time (s)] = 0.5
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    TextComponent hint
      text = left => red    down => green   right = blue
      pos = (0,0.7)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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  Routine Instructions
    TextComponent text
      wrapWidth = 900
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 28
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      text:
        Now that you have practiced a bit, and already know how the task works you will begin the real task.

        If you feel there is anything not sufficiently clear please do not hesitate to ask the researcher about it.

        Please press the <space> bar to start the task.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent text_2
      wrapWidth = 900
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 28
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      text:
        The task has concluded. Thanks for participating.

        Please press the <space> key.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instrpract
    TextComponent instr
      wrapWidth = 900
      color = $[1.000,1.000,1.000]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 28
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      text:
        In the following task words will be presented printed in 'red', 'green' or 'blue'. You will have to press a key depending on the color of the word and not on the content of the word.
        The key for each color is:

            -red    => <left>
            -green  => <down>
            -blue   => <right>

        Let's say that you see the word 'red' printed in blue. In this case you would have to press the <right> key, as the color of the word is blue not red.

        Press the <space> key to do some practice.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent respFeedbk
      Begin Experiment:
        msg= ''
      Begin Routine:
        if resp_time.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp_time.rt)
        else:
          msg="Not the key..."
    TextComponent msgFeedback
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0
      letterHeight = 0.1
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Flow
  Routine instrpract
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = pract_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'green'), ('color', u'green'), ('congruent', 1), ('corrAns', u'down')]),
      OrderedDict([('word', u'green'), ('color', u'green'), ('congruent', 1), ('corrAns', u'down')]),
      OrderedDict([('word', u'blue'), ('color', u'blue'), ('congruent', 1), ('corrAns', u'right')]),
      OrderedDict([('word', u'blue'), ('color', u'blue'), ('congruent', 1), ('corrAns', u'right')]),
      OrderedDict([('word', u'red'), ('color', u'green'), ('congruent', 0), ('corrAns', u'down')]),
      OrderedDict([('word', u'red'), ('color', u'green'), ('congruent', 0), ('corrAns', u'down')]),
      OrderedDict([('word', u'green'), ('color', u'red'), ('congruent', 0), ('corrAns', u'left')]),
      OrderedDict([('word', u'green'), ('color', u'blue'), ('congruent', 0), ('corrAns', u'right')]),
      OrderedDict([('word', u'blue'), ('color', u'green'), ('congruent', 0), ('corrAns', u'down')]),
      OrderedDict([('word', u'blue'), ('color', u'red'), ('congruent', 0), ('corrAns', u'left')])]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'red'), ('color', u'red'), ('congruent', 1), ('corrAns', u'left')]),
      OrderedDict([('word', u'green'), ('color', u'green'), ('congruent', 1), ('corrAns', u'down')]),
      OrderedDict([('word', u'green'), ('color', u'green'), ('congruent', 1), ('corrAns', u'down')]),
      OrderedDict([('word', u'green'), ('color', u'green'), ('congruent', 1), ('corrAns', u'down')]),
      OrderedDict([('word', u'green'), ('color', u'green'), ('congruent', 1), ('corrAns', u'down')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
